#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    microwave_dummy:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20


    mydummyfastcounter:
        module.Class: 'fast_counter_dummy.FastCounterDummy'
        #choose_trace: True
        #gated: False

    mydummypulser:
        module.Class: 'pulser_dummy.PulserDummy'

    ni_pulser:
        module.Class: 'national_instruments_pulser.NationalInstrumentsPulser'
        device: 'Dev2'
        #pulsed_file_dir: 'C:\\Software\\qudi_pulsed_files' # optional, path

logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            pulsegenerator: 'mydummypulser'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter: 'mydummyfastcounter'
            pulsegenerator: 'mydummypulser'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'microwave_dummy'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'
        #additional_fit_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
  
    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: True
        save_png: True

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'


    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'

