# Config file for a simple simulation of the core functions: Confocal, counter,
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    ni_pulser:
        module.Class: 'national_instruments_pulser.NationalInstrumentsPulser'
        device: 'Dev1'
        #pulsed_file_dir: 'D:\\qudi\\qudi_pulsed_files' # optional, path


    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fit'

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI8'
        photon_source2: '/Dev1/PFI9'
        remoteaccess: True

logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counter:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter'
            savelogic: 'save'

    scanner:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            savelogic: 'save'

    optimizer:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            fitlogic: 'fit'

    poimanager:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scanner'
            optimizer1: 'optimizer'
            savelogic: 'save'

    fit:
        module.Class: 'fit_logic.FitLogic'

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    countergui:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counter'

    confocalgui:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scanner'
            savelogic: 'save'
            optimizerlogic1: 'optimizer'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    poimanagergui:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanager'
            confocallogic1: 'scanner'
