# Config file for a simple simulation of the core functions: Confocal, counter,
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']
    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    nicard_6343:
        module.Class: 'national_instruments_x_series.NationalInstrumentsXSeries'
        photon_sources:
            - '/Dev1/PFI8'
        #    - '/Dev1/PFI9'
        clock_channel: '/Dev1/Ctr0'
        default_clock_frequency: 100 # optional, in Hz
        counter_channels:
            - '/Dev1/Ctr1'
        counter_ai_channels:
            - '/Dev1/AI0'
        counter_voltage_range: [-10, 10]
        default_scanner_clock_frequency: 100 # optional, in Hz
        scanner_clock_channel: '/Dev1/Ctr2'
        pixel_clock_channel: '/Dev1/PFI6'
        scanner_ao_channels:
            - '/Dev1/AO0'
            - '/Dev1/AO1'
    #        - '/Dev1/AO2'    #removed
    #        - '/Dev1/AO3'    #removed
        scanner_ai_channels:
         #   - '/Dev1/AI1'
        scanner_counter_channels:
            - '/Dev1/Ctr3'
        scanner_voltage_ranges:
            - [-10, 10]
            - [-10, 10]
  #          - [-10, 10]#removed
 #           - [-10, 10]#removed
        scanner_position_ranges:
            - [0e-6, 200e-6]
            - [0e-6, 200e-6]
      #      - [-100e-6, 100e-6]
       #     - [-10, 10]

        odmr_trigger_channel: '/Dev1/PFI7'

        gate_in_channel: '/Dev1/PFI9'
        default_samples_number: 50
        max_counts: 3e7
        read_write_timeout: 10
        counting_edge_rising: True
    mw_source_smbv:
        module.Class: 'microwave.mw_source_smbv.MicrowaveSmbv'
        gpib_address: 'TCPIP::169.254.154.77::INSTR'#'GPIB::28::INSTR'
        gpib_address: 'TCPIP::169.254.154.77::INSTR'
      #  gpib_timeout: 10s

    ni_pulser:
        module.Class: 'national_instruments_pulser.NationalInstrumentsPulser'
        device: 'Dev1'
        #pulsed_file_dir: 'D:\\qudi\\qudi_pulsed_files' # optional, path

logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counter:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            # counter1: 'mydummycounter'  # this is connected to the dummy object
            counter1: 'nicard_6343'   # swap this line to use the NIcard object as counter
            savelogic: 'save'

    #scanner:
     #   module.Class: 'confocal_logic.ConfocalLogic'
      #  connect:
       #     #confocalscanner1: 'mydummyscanner'  # this is connected to the dummy object
        #    confocalscanner1: 'nicard_6343'   # swap this line to use the NIcard object as scanner
         #   savelogic: 'save'
    # this interfuse enables odmr if hardware trigger is not available or if
    # the counter has only two channels:
    odmr_counter_microwave_interfuse:
        module.Class: 'interfuse.odmr_counter_microwave_interfuse.ODMRCounterMicrowaveInterfuse'
        connect:
            slowcounter: 'nicard_6343'
            microwave: 'mw_source_smbv'

    # this oder logic runs now with the interfuse
    odmrlogic2:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'odmr_counter_microwave_interfuse'
            fitlogic: 'fit'
            microwave1: 'odmr_counter_microwave_interfuse'
            savelogic: 'save'
            taskrunner: 'tasklogic'
        scanmode: 'SWEEP'

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'


    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            pulsegenerator: 'ni_pulser'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter:  'nicard_6343'
            pulsegenerator: 'ni_pulser'
            fitlogic: 'fit'
            savelogic: 'save'
            microwave: 'mw_source_smbv'
    #optimizer:
     #   module.Class: 'optimizer_logic.OptimizerLogic'
      #  connect:
         #confocalscanner1: 'mydummyscanner'  # this is connected to the dummy object
            #confocalscanner1: 'nicard_6343'   # swap this line to use the NIcard object as scanner
       #     fitlogic: 'fit'

    #poimanager:
        #module.Class: 'poi_manager_logic.PoiManagerLogic'
        #connect:
           # scannerlogic: 'scanner'
           # optimizer1: 'optimizer'
          #  savelogic: 'save'

    fit:
        module.Class: 'fit_logic.FitLogic'

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: True
        save_png: True
    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
            dummytask:
                module: 'dummy'
                preposttasks: ['ppdummy']
            #scannerLocationRefocus:
                #module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                #pausetasks: ['scan', 'odmr']
                #needsmodules:
                 #   optimizer: 'optimizer'
        

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    countergui:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counter'

   # confocalgui:
    #    module.Class: 'confocal.confocalgui.ConfocalGui'
     #   connect:
      #      confocallogic1: 'scanner'
       #     savelogic: 'save'
        #    optimizerlogic1: 'optimizer'
        #fixed_aspect_ratio_xy: True
        #fixed_aspect_ratio_depth: True
        #slider_stepsize: 0.001  # in micrometer
        #image_x_padding: 0.02
        #image_y_padding: 0.02
        #image_z_padding: 0.02
    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic2'
            savelogic: 'save'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'

   # poimanagergui:
    #    module.Class: 'poimanager.poimangui.PoiManagerGui'
     #   connect:
      #      poimanagerlogic1: 'poimanager'
       #     confocallogic1: 'scanner'
